OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 2/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  For prerecorded data to test this P300, see

  http://openvibe.inria.fr/datasets/
Comment
  Overview

  This scenario should be used to train
  the LDA classifier.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 70%, just run a new
  4-online session to have better results.

Generic stream reader => #0
  Filename = F:/PhDProjectBackup/July6-2021/swati-xdawn-record-[2021.07.02-19.00.28].ov
#0.Output stream 2 -> Channel Selector "TP9;AF7;AF8;TP10"
  Channel List = TP9;AF7;AF8;TP10
  Action = Select EEG
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #3
  Decimation factor = 4
#0.Output stream 3 -> Stimulation Filter => #4
  Default action = Select
  Time range begin = 0
  Time range end = 3700
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_ExperimentStop
  Stimulation range end = OVTK_StimulationId_ExperimentStop
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Epoch average => #6
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
-> Epoch average => #8
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
New input=#6, New input(1)=#8, New input(2)=#4 -> NN Classifier
  Clock frequency (Hz) = 64
  Script = C:/Users/Admin/AppData/Roaming/openvibe-3.1.0/scenarios/box-tutorials/python3/scripts/nn-classifier-epoch-avg.py
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
