OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Basic P300 3/4
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  classifiers is trained.

  The Target Letter Generation
  box still proposes some targets in order to
  eventually train the classifier
  again, but you may want to disconnect that box
  in order to have a real free time use of
  the speller.

  The flash sequence starts automatically after 20 sec.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. The detected
  letter will be presented in green. This will be repeated
  10 times.

  If the performance of the system does not fit your
  requirements, just run 2-train-classifier
  scenario again on the data you just recorded.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Channel Selector "TP9;AF7;AF8;TP10"
  Channel List = TP9;AF7;AF8;TP10
  Action = Select EEG
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.1000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #4
  Decimation factor = 4
Input signal=#4, Input stimulations=#1.Output stream 3 -> Stimulation based epoching
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
-> Epoch average => #6
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-online-[$core{date}-$core{time}].ov
  Use compression = false
#1.Output stream 3 -> Identity => #8
New input=#8, New input(1)=#6 -> NN Predictor => #9
  Clock frequency (Hz) = 64
  Script = C:/Users/Admin/AppData/Roaming/openvibe-3.1.0/scenarios/box-tutorials/python3/scripts/nn-predictor-prob-softmax-rep-6-xdawn-epoch-avg-6-rep.py
#8 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> P300 Speller Stimulator => #12
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 6
  Number of trials = 20
  Flash duration (in sec) = 0.100000
  No flash duration (in sec) = 0.200000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #13
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) = 1mb7leotw9yarv4ndgj3
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Sequence stimulations=#12, Target stimulations=#13, Row selection stimulations=#9.New output, Column selection stimulations=#9.New output(1) -> P300 Speller Visualization
  Interface filename = ${Path_Data}/plugins/simple-visualization/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualization.cfg
